PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'gender': '"man", "woman", "other"', 'age': '', 'handedness': '"right-handed", "left-handed"', 'education (years)': '', 'shape': '"square", "diamond"', 'controls': '"regular", "reversed"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.5059, 0.5059, 0.5059
  expName = grid
  keyboardBackend = ioHub
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Routines
  Routine create_data
    CodeComponent functions
      Code Type = Auto->JS
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      Before Experiment:
        # Importing libraries
        import random
        import copy

        # Create a grid
        def create_grid(x, y, box_size_x, box_size_y):

            start_x = int((x / 2 - x) + (box_size_x / 2))
            start_y = int((y / 2 - y) + (box_size_y / 2))
            x_limit = int(x / 2)
            y_limit = int(y / 2)

            grid = []

            while start_x < x_limit:
                while start_y < y_limit:
                    grid.append([start_x, start_y])
                    start_y += box_size_y

                start_y = int((y / 2 - y) + (box_size_y / 2))
                start_x += box_size_x

            return grid

        # Call the function
        grid = create_grid(1900, 1000, 190, 100)


        # Create a color palette
        def create_color_palette(*colors):
            color_palette = []
            for color in colors:
                color_palette.append(color)

            return color_palette

        # Call the function
        color_palette = create_color_palette('green', 'red', 'blue','saddlebrown', '#ff94c0' , 'cyan', 'purple', 'orange', 'yellow')


        # Randomize the grid locations function
        def randomize_location(loc, val_x, val_y):
            loc[0] = random.randint(loc[0]-val_x, loc[0]+val_x)
            loc[1] = random.randint(loc[1]-val_y, loc[1]+val_y)
            return [loc[0], loc[1]]
    CodeComponent trials
      Code Type = Auto->JS
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      Before Experiment:
        # Define the number of training trials
        num_of_training = 4

        # Define the number of the experiment trials
        num_of_trials = 4
      Begin Routine:
        # Create trials
        trial_order = []
        training_order = []

        # Regular trials
        for trial in range(num_of_trials):
            if trial >= num_of_trials/2:
                trial_order.append(1)
            else:
                trial_order.append(0)

        # Training trials
        for trial in range(num_of_training):
            if trial >= num_of_training/2:
                training_order.append(1)
            else:
                training_order.append(0)

        # Shuffle the trials order
        random.shuffle(trial_order)
        random.shuffle(training_order)
    CodeComponent shape
      Code Type = Auto->JS
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      Before Experiment:
        shapeOrientation = 0
        shapeName = ''
      Begin Experiment:
        if expInfo["shape"] == 'square':
            shapeOrientation = 0
            shapeName = 'Square'
        else:
            shapeOrientation = 45
            shapeName = 'Diamond'
    CodeComponent training
      Code Type = Py
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      Begin Routine:
        # Order:           1          0          1          0             0           0              1          1
        shape_answers = [  1,         0,         1,         0,            0,          0,             1,         1]
        shape1_shape = ['square', 'square'  , 'circle', 'triangle'   ,'triangle' ,'square'      ,'square' , 'triangle']
        shape2_shape = ['square', 'triangle', 'circle', 'circle'     , 'circle'  , 'triangle'   , 'square', 'triangle']
        shape1_color = ['red'   , 'red'     , 'blue'  , 'saddlebrown', 'cyan'    , 'purple'     , 'orange', 'yellow']
        shape2_color = ['red'   , 'purple'  , 'blue'  , 'green'      , 'cyan'    , 'saddlebrown', 'orange', 'yellow']
    CodeComponent controls
      Code Type = Auto->JS
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      Begin Experiment:
        identical_key = 0
        non_identical_key = 0

        if expInfo['controls'] == 'regular':
            identical_key = 112
            non_identical_key = 113
            print('Regular Controls')
            print('P = Identical | Q = Non-Identical')

        elif expInfo['controls'] == 'reversed':
            identical_key = 113
            non_identical_key = 112
            print('Reversed Controls')
            print('Q = Identical | P = Non-Identical')
  Routine rating
    ButtonComponent redisplay_image
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (-0.5, -0.35)
      size = (0.3, 0.15)
      startVal [time (s)] = 0
      text = Redisplay Image
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  Routine fixation
    TextComponent fixation_point
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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      text:
        Ready?
        +
  Routine blank
    TextComponent blank_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine create_order
    CodeComponent order
      Code Type = Auto->JS
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      Begin Routine:
        import random

        trial_order = []

        for trial in range(num_of_trials):
            if trial >= num_of_trials/2:
                trial_order.append('==')
            else:
                trial_order.append('!=')

        random.shuffle(trial_order)
        debug.text = trial_order
    TextComponent debug
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine image_1
    PolygonComponent img1_bg
      fillColor = 0.5059, 0.5059, 0.5059
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (1920, 1080)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b1
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b2
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b3
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b4
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    CodeComponent routine_start
      Code Type = Auto->JS
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      Begin Routine:
        # Records the `fullRoutineRT` start

        if redisplay_image_loop.thisN == 0:
            fullRoutineStart = core.getTime()
  Routine image_2
    PolygonComponent img2_bg
      fillColor = 0.5059, 0.5059, 0.5059
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (1920, 1080)
      startVal [time (s)] = 0
      units = pix
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    PolygonComponent img2_b1
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b2
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b3
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b4
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent redisplay_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_answer
      Code Type = Py
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      Before Experiment:
        answerVariant = ''
        pressedKey = ''
        numOfCorrectAnswers = 0
        numOfWrongAnswers = 0
        totalNumOfLoops = 0
      Begin Experiment:
        current_key = 0
      Begin Routine:
        # Records the `singleRoutineRT` start
        singleRoutineStart = core.getTime()
      Each Frame:
        keys = event.getKeys()

        if len(keys)>0:
            for thisKey in keys:
                current_key = ord(thisKey[0])

                if current_key == identical_key or current_key == non_identical_key:
                    redisplay_image_loop.finished = True
                    continueRoutine = False

        #        elif current_key == 115:
        #            redisplay_image_loop.finished = False
        #            continueRoutine = False
      End Routine:
        # Records the `singleRoutineRT` and `fullRoutineRT` end
        routineEnd = core.getTime()


        # imagesVariation:
        # 1 - '==' Identical Images
        # 0 - '!=' Non-Identical Images
        redisplay_image_loop.addData('imagesVariation', trial_order[show_images.thisN])

        if trial_order[show_images.thisN] == 0:
            redisplay_image_loop.addData('imagesVariationSign', '!=')
        elif trial_order[show_images.thisN] == 1:
            redisplay_image_loop.addData('imagesVariationSign', '==')


        # Key 112
        if current_key == identical_key:

            pressedKey = 'p' if identical_key == 112 else 'q'

            if trial_order[show_images.thisN] == 1:
                redisplay_image_loop.addData('correctAnswerBoolean', True)
                redisplay_image_loop.addData('correctAnswer', 1)
                numOfCorrectAnswers += 1
            else:
                redisplay_image_loop.addData('correctAnswerBoolean', False)
                redisplay_image_loop.addData('correctAnswer', 0)
                numOfWrongAnswers += 1

            redisplay_image_loop.addData('fullRoutineRT', routineEnd - fullRoutineStart)
            redisplay_image_loop.addData('locations', locations)
            redisplay_image_loop.addData('img1Colors', img1_colors)
            redisplay_image_loop.addData('img2Colors', img2_colors)


        # Key 113
        elif current_key == non_identical_key:

            pressedKey = 'q' if non_identical_key == 113 else 'p'

            if trial_order[show_images.thisN] == 0:
                redisplay_image_loop.addData('correctAnswerBoolean', True)
                redisplay_image_loop.addData('correctAnswer', 1)
                numOfCorrectAnswers += 1
            else:
                redisplay_image_loop.addData('correctAnswerBoolean', False)
                redisplay_image_loop.addData('correctAnswer', 0)
                numOfWrongAnswers += 1

            redisplay_image_loop.addData('fullRoutineRT', routineEnd - fullRoutineStart)
            redisplay_image_loop.addData('locations', locations)
            redisplay_image_loop.addData('img1Colors', img1_colors)
            redisplay_image_loop.addData('img2Colors', img2_colors)

        # Key 115 = 'space'
        elif current_key == 115:
            pressedKey = 'space'
            totalNumOfLoops += 1


        # Saving data
        redisplay_image_loop.addData('routineNumber', show_images.thisN)
        redisplay_image_loop.addData('pressedKey', pressedKey)
        redisplay_image_loop.addData('numOfCorrectAnswers', numOfCorrectAnswers)
        redisplay_image_loop.addData('numOfWrongAnswers', numOfWrongAnswers)
        redisplay_image_loop.addData('numOfLoops', redisplay_image_loop.thisN)
        redisplay_image_loop.addData('totalNumOfLoops', totalNumOfLoops)
        redisplay_image_loop.addData('singleRoutineRT', routineEnd - singleRoutineStart)
  Routine finish
    TextComponent finish_text
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        מטלה זו הסתיימה, נא עדכן\י את הנסיינית.
        תודה רבה.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent data_summary
      Code Type = Py
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      End Experiment:
        # Data Overview

        thisExp.addData('numOfCorrectAnswers', numOfCorrectAnswers)
        thisExp.addData('numOfWrongAnswers', numOfWrongAnswers)
        thisExp.addData('totalNumOfLoops', totalNumOfLoops)
        thisExp.addData('totalNumOfTrials', num_of_trials)
        thisExp.addData('trialsOrder', trial_order)

        genderBoolean = 0
        if expInfo["gender"] == 'woman':
            genderBoolean = 0
        elif expInfo["gender"] == 'man':
            genderBoolean = 1
        else:
            genderBoolean = 2

        thisExp.addData('genderBoolean', genderBoolean)
        thisExp.addData('shapeBoolean', 0 if expInfo["shape"] == 'square' else 1)
        thisExp.addData('handednessBoolean', 0 if expInfo["handedness"] == 'right-handed' else 1)

        thisExp.nextEntry()
  Routine images_randomization
    CodeComponent location
      Code Type = Py
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      Begin Routine:
        # List of locations
        locations = []

        # Randomize the grid locations
        current_grid = copy.deepcopy(grid)
        random.shuffle(current_grid)

        # Add randomization for each block
        # Set the block location
        for idx, block in enumerate([[img1_b1, img2_b1], [img1_b2, img2_b2], [img1_b3, img2_b3], [img1_b4, img2_b4]]):
            current_location = randomize_location(current_grid[idx], 38, 20)
            block[0].pos = block[1].pos = current_location
            locations.append(current_location)
    CodeComponent color
      Code Type = Py
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      Begin Routine:
        import random

        # Randomize the color palette
        random.shuffle(color_palette)

        # Pick 5 Random colors
        random_colors = []
        random_colors+=random.sample(color_palette, 5)

        # Assign the first 5 colors to the blocks
        for idx, block in enumerate([[img1_b1, img2_b1], [img1_b2, img2_b2], [img1_b3, img2_b3], img1_b4, img2_b4]):
            current_color = random_colors[idx]

            if type(block) == list:
                block[0].color = block[1].color = current_color
            else:
                if trial_order[show_images.thisN] == 1:
                    img1_b4.color = img2_b4.color = current_color
                    break
                else:
                    block.color = current_color


        if trial_order[show_images.thisN] == 1:
            img1_colors = img2_colors = random_colors[0:4]
        else:
            img1_colors = random_colors[0:4]
            img2_colors = random_colors[0:3]
            img2_colors.append(random_colors[4])
  Routine image_1_t
    PolygonComponent img_1_bg_t
      fillColor = 0.5059, 0.5059, 0.5059
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (1920, 1080)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b1_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b2_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b3_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent img1_b4_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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  Routine image_2_t
    PolygonComponent img2_bg_t
      fillColor = 0.5059, 0.5059, 0.5059
      lineColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = rectangle
      size = (1920, 1080)
      startVal [time (s)] = 0
      units = pix
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    PolygonComponent img2_b1_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b2_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b3_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent img2_b4_t
      fillColor = white
      ori = shapeOrientation
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent redisplay_key_t
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_answer_t
      Code Type = Auto->JS
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      Begin Experiment:
        current_key = 0
      Each Frame:
        keys = event.getKeys()

        if len(keys)>0:
            for thisKey in keys:
                current_key = ord(thisKey[0])

                if current_key == identical_key or current_key == non_identical_key:
                    redisplay_image_loop_t.finished = True
                    continueRoutine = False

        #        elif current_key == 115:
        #            redisplay_image_loop_t.finished = False
        #            continueRoutine = False
        #
  Routine images_randomization_t
    CodeComponent location_t
      Code Type = Py
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      Begin Routine:
        # Randomize the grid locations
        current_grid = copy.deepcopy(grid)
        random.shuffle(current_grid)

        # Add randomization for each block
        # Set the block location
        for idx, block in enumerate([[img1_b1_t, img2_b1_t], [img1_b2_t, img2_b2_t], [img1_b3_t, img2_b3_t], [img1_b4_t, img2_b4_t]]):
            current_location = randomize_location(current_grid[idx], 38, 20)
            block[0].pos = block[1].pos = current_location
    CodeComponent color_t
      Code Type = Py
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      Begin Routine:
        import random

        # Randomize the color palette
        random.shuffle(color_palette)

        # Pick 5 Random colors
        random_colors = []
        random_colors+=random.sample(color_palette, 5)

        # Assign the first 5 colors to the blocks
        for idx, block in enumerate([[img1_b1_t, img2_b1_t], [img1_b2_t, img2_b2_t], [img1_b3_t, img2_b3_t], img1_b4_t, img2_b4_t]):
            current_color = random_colors[idx]

            if type(block) == list:
                block[0].color = block[1].color = current_color
            else:
                if training_order[show_images_t.thisN] == 1:
                    img1_b4_t.color = img2_b4_t.color = current_color
                    break
                else:
                    block.color = current_color
  Routine instructions_3
    TextComponent training_text
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        כעת יחל שלב האימון. מטרת שלב זה לוודא כי המטלה ברורה.
        בשלב זה ניתן לעצור בכל זמן ע"מ לשאול שאלות.

        לחצ\י "רווח" במקלדת ע"מ להתחיל.
    KeyboardComponent skip
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine redisplay_blank
    TextComponent redisplay_blank_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    CodeComponent redisplay_blank_code
      Code Type = Auto->JS
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      Each Frame:
        if currentLoop.thisN == 0:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine instructions_training
    TextComponent inst_training
      color = black
      languageStyle = RTL
      letterHeight = 0.037
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        כעת נתרגל את השימוש בלחצים "זהים" (P) ו"שונים" (Q).

        כל צעד יחל בסימן + במרכז המסך.
        לאחר מכן, יופיעו שתי צורות על המסך.
        במידה והצורות זהות בצורתן ובצבען - אנא לחצ\י "זהים", P במקלדת.
        במידה והצורות שונות בצורתן ו\או בצבען - אנא לחצ\י "שונים", Q במקלדת.

        במידה ויש לך שאלות, שאל\י את הנסיינית כעת.
        במידה ואת\ה מוכן להתחיל, לחצ\י "רווח" במקלדת.
    KeyboardComponent skip_inst_training
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine steps
    PolygonComponent circle_1
      fillColor = 0.0824, -0.6627, 0.7725
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (50, 0)
      saveStartStop = False
      shape = circle
      size = (20, 20)
      startVal [condition] = $currentShape1 == 'circle'
      units = pix
      vertices = shape_1_shape
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    PolygonComponent triangle_1
      fillColor = 0.0824, -0.6627, 0.7725
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (50, 0)
      saveStartStop = False
      shape = triangle
      size = (20, 20)
      startVal [condition] = $currentShape1 == 'triangle'
      units = pix
      vertices = shape_1_shape
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    PolygonComponent square_1
      fillColor = 0.0824, -0.6627, 0.7725
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (50, 0)
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [condition] = $currentShape1 == 'square'
      units = pix
      vertices = shape_1_shape
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    PolygonComponent circle_2
      fillColor = 0.9216, 0.9216, 0.7255
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (-50, 0)
      saveStartStop = False
      shape = circle
      size = (20, 20)
      startVal [condition] = $currentShape2 == 'circle'
      units = pix
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    PolygonComponent triangle_2
      fillColor = 0.0824, -0.6627, 0.7725
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (-50, 0)
      saveStartStop = False
      shape = triangle
      size = (20, 20)
      startVal [condition] = $currentShape2 == 'triangle'
      units = pix
      vertices = shape_1_shape
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    PolygonComponent square_2
      fillColor = 0.0824, -0.6627, 0.7725
      lineColor = 0.0000, 0.0000, 0.0000
      nVertices = 3
      pos = (-50, 0)
      saveStartStop = False
      shape = rectangle
      size = (20, 20)
      startVal [condition] = $currentShape2 == 'square'
      units = pix
      vertices = shape_1_shape
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    CodeComponent key_press
      Code Type = Py
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      Begin Experiment:
        thisKey = ''
      Each Frame:
        keys = event.getKeys()

        if len(keys)>0:
            for thisKey in keys:
                current_key = ord(thisKey[0])

                # Skip to next routine
                if current_key == identical_key or current_key == non_identical_key:
                    # P - 112 | Identical
                    if current_key == identical_key:
                        answers.append(identical_key)

                    # Q - 113 | Non-Identical
                    if current_key == non_identical_key:
                        answers.append(non_identical_key)

                    continueRoutine = False
    CodeComponent shapes_creator
      Code Type = Auto->JS
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      Begin Routine:
        currentStep = training_loop.thisN

        circle_1.color = triangle_1.color = square_1.color = shape1_color[currentStep]
        circle_2.color = triangle_2.color = square_2.color = shape2_color[currentStep]

        currentShape1 = shape1_shape[currentStep]
        currentShape2 = shape2_shape[currentStep]
  Routine calculate_success
    TextComponent calculate_text
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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    CodeComponent calc_success
      Code Type = Py
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      Begin Routine:
        for trial in range(8):

            # Identical
            if shape_answers[trial] == 1:
                # Correct Answer
                if answers[trial] == identical_key:
                    trainingCorrectAnswers += 1


            # Non-identical
            else:
                # Correct Answer
                if answers[trial] == non_identical_key:
                    trainingCorrectAnswers += 1


        successRate = trainingCorrectAnswers / 8 * 100
        calculate_text.text = str(successRate) + '\n' + 'אנא פנה\י לנסיינית.'

        # If the participant successfully answered at least 75% of the answers
        if successRate >= 75:
            repeat_training.finished = True
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()

        if len(keys)>0:
            for thisKey in keys:
                current_key = ord(thisKey[0])

                # Repeat the initial training - 'r'
                if current_key == 114:
                    continueRoutine = False
      End Routine:
        # Save success rate
        thisExp.addData('initialTraining_sucessRate', successRate)
        thisExp.addData('initialTraining_loopNum', repeat_training.thisN)


        thisExp.nextEntry()
  Routine reset_success
    CodeComponent reset_success_2
      Code Type = Auto->JS
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      Before Experiment:
        answers = []
      Begin Routine:
        answers = []
        trainingCorrectAnswers = 0
        successRate = 0
  Routine instructions_t
    TextComponent inst_t
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        כעת יחל שלב האימון. מטרת שלב זה לוודא כי המטלה ברורה.
        בשלב זה ניתן לעצור בכל זמן ע"מ לשאול שאלות.

        לחצ\י "רווח" במקלדת ע"מ להתחיל.
    KeyboardComponent skip_t
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_start_1
    TextComponent inst1_square
      color = black
      languageStyle = RTL
      letterHeight = 0.037
      saveStartStop = False
      startVal [condition] = $shapeName=='Square'
      wrapWidth = 800
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      text:
        במטלה זו, כל צעד יחל בסימן + במרכז המסך.
        יש להקפיד להסתכל למרכז המסך לאורך כל הניסוי.

        לאחר מכן יופיע מסך עם ריבועים צבעוניים.
        לאחר שמסך זה יעלם, יופיע מסך נוסף עם ריבועים צבעוניים.
        עליך להחליט האם הריבועים במסך השני זהים לחלוטין בצבעם לריבועים במסך הראשון.
        במידה ויהיה שינוי, הוא ישפיע על צבעו של ריבוע אחד בלבד.

        עלייך לבצע את המטלה באופן הטוב ביותר שאת\ה יכול\ה.

        במידה ויש לך שאלות, שאל\י את הנסיינית כעת.
        במידה ולא, לחצ\י רווח במקלדת.
    TextComponent inst1_diam
      color = black
      languageStyle = RTL
      letterHeight = 0.037
      saveStartStop = False
      startVal [condition] = $shapeName=='Diamond'
      wrapWidth = 800
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      text:
        במטלה זו, כל צעד יחל בסימן + במרכז המסך.
        יש להקפיד להסתכל למרכז המסך לאורך כל הניסוי.

        לאחר מכן יופיע מסך עם מעוינים צבעוניים.
        לאחר שמסך זה יעלם, יופיע מסך נוסף עם מעוינים צבעוניים.
        עליך להחליט האם המעוינים במסך השני זהים לחלוטין בצבעם למעוינים במסך הראשון.
        במידה ויהיה שינוי, הוא ישפיע על צבעו של מעוין אחד בלבד.

        עלייך לבצע את המטלה באופן הטוב ביותר שאת\ה יכול\ה.

        במידה ויש לך שאלות, שאל\י את הנסיינית כעת.
        במידה ולא, לחצ\י רווח במקלדת.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_start_2
    TextComponent inst2_square
      color = black
      languageStyle = RTL
      letterHeight = 0.037
      saveStartStop = False
      startVal [condition] = $shapeName=='Square'
      wrapWidth = 800
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      text:
        אם צבעי כל הריבועים במסך השני זהים לצבעם במסך הראשון, לחצ\י על 'P' במקלדת.
        אם צבעו של אחד הריבועים השתנה, לחצ\י על 'Q' במקלדת.
        אם ברצונך לראות את המסך הראשון שוב לפני תשובה סופית, לחצ\י על 'רווח' במקלדת.
        אין הגבלה על מספר הפעמים שניתן ללחוץ 'רווח'.

        בסוף כל צעד תופיע הודעה:
        "?ready"
        המכינה לקראת המסך הבא.

        במידה ויש לך שאלות, שאל\י את הנסיינית כעת.
        במידה ולא, לחצ\י רווח במקלדת.
    TextComponent inst2_diam
      color = black
      languageStyle = RTL
      letterHeight = 0.037
      saveStartStop = False
      startVal [condition] = $shapeName=='Diamond'
      wrapWidth = 800
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      text:
        אם צבעי כל המעוינים במסך השני זהים לצבעם במסך הראשון, לחצ\י על 'P' במקלדת.
        אם צבעו של אחד המעוינים השתנה, לחצ\י על 'Q' במקלדת.
        אם ברצונך לראות את המסך הראשון שוב לפני תשובה סופית, לחצ\י על 'רווח' במקלדת.
        אין הגבלה על מספר הפעמים שניתן ללחוץ 'רווח'.

        בסוף כל צעד תופיע הודעה:
        "?ready"
        המכינה לקראת המסך הבא.

        במידה ויש לך שאלות, שאל\י את הנסיינית כעת.
        במידה ולא, לחצ\י רווח במקלדת.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_exp
    TextComponent exp_text
      color = black
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        שלב האימון הסתיים, כעת יתחיל שלב הניסוי.

        במידה ויש לך שאלות נוספות, שאל\י את הנסיינית כעת.
        לא יהיה ניתן לעצור לשאלות נוספות בזמן שלב הניסוי.

        במידה ואת\ה מוכנ\ה להתחיל, לחצ\י "רווח" במקלדת.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine answer_feedback
    CodeComponent update_answer
      Code Type = Auto->JS
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      Before Experiment:
        def answerType(text, bool):
            if bool:
                text.text = 'V'
                text.color = 'green'
            else:
                text.text = 'X'
                text.color = 'red'
      Begin Routine:
        if shape1_shape[training_loop.thisN] == shape2_shape[training_loop.thisN] and shape1_color[training_loop.thisN] == shape1_color[training_loop.thisN]:
            if answers[training_loop.thisN] == identical_key:
                answerType(feedback_text, True)
            else:
                answerType(feedback_text, False)

        else:
            if answers[training_loop.thisN] == non_identical_key:
                answerType(feedback_text, True)
            else:
                answerType(feedback_text, False)
    TextComponent feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine create_data
  Routine instructions_start_1
  Routine instructions_start_2
  Routine instructions_training
  LoopInitiator repeat_training loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 999
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    Routine reset_success
    LoopInitiator training_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 8
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      Routine fixation
      Routine steps
      Routine answer_feedback
    LoopTerminator training_loop
    Routine calculate_success
  LoopTerminator repeat_training
  Routine instructions_t
  LoopInitiator show_images_t loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = num_of_training
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    Routine images_randomization_t
    Routine fixation
    LoopInitiator redisplay_image_loop_t loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 999
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      Routine redisplay_blank
      Routine image_1_t
      Routine blank
      Routine image_2_t
    LoopTerminator redisplay_image_loop_t
  LoopTerminator show_images_t
  Routine instructions_exp
  LoopInitiator show_images loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = num_of_trials
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    Routine images_randomization
    Routine fixation
    LoopInitiator redisplay_image_loop loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine redisplay_blank
      Routine image_1
      Routine blank
      Routine image_2
    LoopTerminator redisplay_image_loop
  LoopTerminator show_images
  Routine finish
